CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw_em
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw_em
    Name the output image:crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:2500,4000
    Top and bottom rectangle positions:1700,3200
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    Remove empty rows and columns?:All
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
GaussianFilter:[module_num:6|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
    Select the input image:crop
    Name the output image:filter
    Sigma:2

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:filter
    Name the output image:Illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:10
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:filter
    Name the output image:Corr
    Select the illumination function:Illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:9|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
    Select the input image:Corr
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:10|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
    Select the input image:RescaleIntensity
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.05
    Lower and upper bounds on threshold:.5,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

RemoveHoles:[module_num:11|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notes:['removes not holes but, random cell debris (since the image is in negative)']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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:10

Closing:[module_num:12|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
    Select the input image:RemoveHoles
    Name the output image:Closing
    Structuring element:disk,3

Watershed:[module_num:13|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
    Select the input image:Closing
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Watershed

FilterObjects:[module_num:15|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notes:['remove border components']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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:17|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
    Select the objects to filter:FilterObjects
    Name the output objects:filteredfibrils
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.5
    Filter using a maximum measurement value?:No
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
ErodeObjects:[module_num:18|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
    Select the input object:FilterObjects
    Name the output object:ErodeObjects
    Structuring element:disk,2
    Prevent object removal:Yes
    Relabel resulting objects:No

DilateObjects:[module_num:19|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
    Select the input object:ErodeObjects
    Name the output object:DilateObjects
    Structuring element:disk,2

ExpandOrShrinkObjects:[module_num:20|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
    Select the input objects:DilateObjects
    Name the output objects:ShrunkenOpened
    Select the operation:Add partial dividing lines between objects
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ShrunkenOpened

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:ShrunkenOpened
    Name the output image:fibrilimage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:fibrilimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_em
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_proc
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The University of Manchester)/fibril-tracking/nuts-and-bolts-3view/9am-achilles-fshx-processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_em
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:9am-4R
    Overwrite existing files without warning?:Yes
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